PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1463, 914]
  expName = Priyanshi.AU2220101_Intentional.binding
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent polygon
      fillColor = -1.0000, 0.0039, -1.0000
      lineColor = -1.0000, 0.0039, -1.0000
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 1.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine beep
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    SoundComponent sound_1
      sound [set every repeat] = $freq
      startVal [time (s)] = $delay
      stopVal [duration (s)] = 0.3
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  Routine response
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    TextComponent text
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Report the delay between the keypress and the beep sound (0-999); click submit after entering the value
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.1, 0.3)
      startVal [time (s)] = 0.0
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    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = Submit
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = ib_conditions.xlsx
    loopType = random
    nReps = 33
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    conditions:
      [{'delay': 0.1, 'freq': 400, 'condition': 'unexp'},
      {'delay': 0.4, 'freq': 400, 'condition': 'unexp'},
      {'delay': 0.7, 'freq': 400, 'condition': 'unexp'},
      {'delay': 0.1, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.4, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.7, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.1, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.4, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.7, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.1, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.4, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.7, 'freq': 1000, 'condition': 'exp'}]
    Routine trial
    Routine beep
    Routine response
  LoopTerminator trials
